PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Final exp
  keyboardBackend = ioHub
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Routines
  Routine introduction
    TextComponent Introduction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to our study.
        You will be shown 20 faces for 2 seconds each. Try to remember each face. You will be asked to recognise them later.
        Press space to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Testing_instructions
    TextComponent Instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will be shown 40 images.

        Press right arrow key if you recognise the face. Press left arrow key if you do not recognise the face.
        Press space to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Learning
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    ImageComponent image
      image [set every repeat] = $stimulus
      size = (1.0, 1.0)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2
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  Routine Testing
    PolygonComponent fixation_2
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    ImageComponent Testing_phase
      flipHoriz = True
      image [set every repeat] = $stimulus
      size = (1.0, 1.0)
      startVal [time (s)] = 1.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Thank_You
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Thank You
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Flow
  Routine introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Learning conditions.csv
    loopType = fullRandom
    nReps = 1
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    conditions:
      [OrderedDict([('stimulus', 'C:\\Users\\POORAV\\OneDrive\\Desktop\\Lab in Psych\\Face Detection Assignment\\Learning images\\african 2 male neutral.jpg')]),
      OrderedDict([('stimulus', 'C:\\Users\\POORAV\\OneDrive\\Desktop\\Lab in Psych\\Face Detection Assignment\\Learning images\\african 3 female smile_banded.jpg')]),
      OrderedDict([('stimulus', 'C:\\Users\\POORAV\\OneDrive\\Desktop\\Lab in Psych\\Face Detection Assignment\\Learning images\\african 7 male neutral_banded.jpg')]),
      OrderedDict([('stimulus', 'C:\\Users\\POORAV\\OneDrive\\Desktop\\Lab in Psych\\Face Detection Assignment\\Learning images\\african 8 male smile_banded.jpg')]),
      OrderedDict([('stimulus', 'C:\\Users\\POORAV\\OneDrive\\Desktop\\Lab in Psych\\Face Detection Assignment\\Learning images\\african 10 female smile.jpg')]),
      OrderedDict([('stimulus', 'C:\\Users\\POORAV\\OneDrive\\Desktop\\Lab in Psych\\Face Detection Assignment\\Learning images\\white 1 female smile.jpg')]),
      OrderedDict([('stimulus', 'C:\\Users\\POORAV\\OneDrive\\Desktop\\Lab in Psych\\Face Detection Assignment\\Learning images\\white 3 male smile_banded.jpg')]),
      OrderedDict([('stimulus', 'C:\\Users\\POORAV\\OneDrive\\Desktop\\Lab in Psych\\Face Detection Assignment\\Learning images\\white 4 male neutral.jpg')]),
      OrderedDict([('stimulus', 'C:\\Users\\POORAV\\OneDrive\\Desktop\\Lab in Psych\\Face Detection Assignment\\Learning images\\white male 9 smile.jpg')])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
    Routine Learning
  LoopTerminator trials
  Routine Testing_instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Testing conditions.csv
    loopType = fullRandom
    nReps = 1
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    conditions:
      [OrderedDict([('stimulus', 'C:\\Users\\POORAV\\OneDrive\\Desktop\\Lab in Psych\\Face Detection Assignment\\Testing images\\Indian 3 female smile old.jpg'), ('corr_ans', 'right')]),
      OrderedDict([('stimulus', 'C:\\Users\\POORAV\\OneDrive\\Desktop\\Lab in Psych\\Face Detection Assignment\\Testing images\\indian 3 male neutral old.jpg'), ('corr_ans', 'right')]),
      OrderedDict([('stimulus', 'C:\\Users\\POORAV\\OneDrive\\Desktop\\Lab in Psych\\Face Detection Assignment\\Testing images\\indian 4 male smile.jpg'), ('corr_ans', 'left')]),
      OrderedDict([('stimulus', 'C:\\Users\\POORAV\\OneDrive\\Desktop\\Lab in Psych\\Face Detection Assignment\\Testing images\\indian 5 female neutral.jpg'), ('corr_ans', 'left')]),
      OrderedDict([('stimulus', 'C:\\Users\\POORAV\\OneDrive\\Desktop\\Lab in Psych\\Face Detection Assignment\\Testing images\\indian 6 female smile old.jpg'), ('corr_ans', 'right')]),
      OrderedDict([('stimulus', 'C:\\Users\\POORAV\\OneDrive\\Desktop\\Lab in Psych\\Face Detection Assignment\\Testing images\\indian 7 female neutral.jpg'), ('corr_ans', 'left')]),
      OrderedDict([('stimulus', 'C:\\Users\\POORAV\\OneDrive\\Desktop\\Lab in Psych\\Face Detection Assignment\\Testing images\\indian 8 female neutral.jpg'), ('corr_ans', 'left')]),
      OrderedDict([('stimulus', 'C:\\Users\\POORAV\\OneDrive\\Desktop\\Lab in Psych\\Face Detection Assignment\\Testing images\\indian 9 female smile.jpg'), ('corr_ans', 'left')])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
    Routine Testing
  LoopTerminator trials_2
  Routine Thank_You
